CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does containregexp "blue")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "red")
    Name to assign these images:Tunel
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:DAPI
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.75
    Lower and upper bounds on threshold:0.001,1
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

OverlayObjects:[module_num:6|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
    Input:DNA
    Name the output image:OverlayDNA
    Objects:DAPI
    Opacity:0.2

DisplayDataOnImage:[module_num:7|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
    Display object or image measurements?:Object
    Select the input objects:DAPI
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OverlayDNA
    Text color:#FEFE0A
    Name the output image that has the measurements displayed:DisplayDAPI
    Font size (points):8
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:OverlayDNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Tunel
    Name the primary objects to be identified:TUNEL_pos
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.001,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

OverlayObjects:[module_num:10|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
    Input:Tunel
    Name the output image:OverlayTUNEL
    Objects:TUNEL_pos
    Opacity:0.3

DisplayDataOnImage:[module_num:11|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
    Display object or image measurements?:Object
    Select the input objects:TUNEL_pos
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OverlayTUNEL
    Text color:#FEFE0A
    Name the output image that has the measurements displayed:DisplayTUNEL
    Font size (points):8
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:OverlayTUNEL
    Select method for constructing file names:From image filename
    Select image name for file prefix:Tunel
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
RelateObjects:[module_num:13|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
    Parent objects:DAPI
    Child objects:TUNEL_pos
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelatedTUNEL
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
ConvertObjectsToImage:[module_num:14|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
    Select the input objects:RelatedTUNEL
    Name the output image:TUNEL_Nuc
    Select the color format:Binary (black & white)
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
OverlayObjects:[module_num:15|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
    Input:Tunel
    Name the output image:OverlayRelated
    Objects:RelatedTUNEL
    Opacity:0.2

DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:RelatedTUNEL
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OverlayTUNEL
    Text color:#FEFE0A
    Name the output image that has the measurements displayed:DisplayRelated
    Font size (points):8
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:OverlayRelated
    Select method for constructing file names:From image filename
    Select image name for file prefix:Tunel
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:TUNEL_pos|Number_Object_Number,TUNEL_pos|Children_RelatedTUNEL_Count,TUNEL_pos|Parent_DAPI,TUNEL_pos|Location_Center_Y,TUNEL_pos|Location_Center_X,TUNEL_pos|Location_Center_Z,RelatedTUNEL|Location_Center_Y,RelatedTUNEL|Location_Center_X,RelatedTUNEL|Location_Center_Z,RelatedTUNEL|Parent_TUNEL_pos,RelatedTUNEL|Number_Object_Number,DAPI|Number_Object_Number,DAPI|Children_TUNEL_pos_Count,DAPI|Location_Center_Y,DAPI|Location_Center_X,DAPI|Location_Center_Z,Image|Count_DAPI,Image|Count_RelatedTUNEL,Image|Count_TUNEL_pos,Image|Group_Index,Image|Group_Number,Image|Width_DNA,Image|Width_Tunel,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:All_image_data.csv
    Use the object name for the file name?:No
    Data to export:DAPI
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei_only.csv
    Use the object name for the file name?:No
    Data to export:TUNEL_pos
    Combine these object measurements with those of the previous object?:No
    File name:TUNEL_only.csv
    Use the object name for the file name?:No
