CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:30
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does containregexp "red")
    Name to assign these images:CD45
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "green")
    Name to assign these images:Cardiomyocyte_CM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "green")
    Name to assign these images:CM_border
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "blue")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:DAPI_segment
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.001,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

OverlayObjects:[module_num:6|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
    Input:DAPI
    Name the output image:Overlay_DAPI
    Objects:DAPI_segment
    Opacity:0.2

DisplayDataOnImage:[module_num:7|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
    Display object or image measurements?:Object
    Select the input objects:DAPI_segment
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Overlay_DAPI
    Text color:#FEFE0A
    Name the output image that has the measurements displayed:NumberDAPI
    Font size (points):8
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:NumberDAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
Smooth:[module_num:9|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
    Select the input image:CD45
    Name the output image:FilteredCD45
    Select smoothing method:Smooth Keeping Edges
    Calculate artifact diameter automatically?:Yes
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    Edge intensity difference:0.1
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:FilteredCD45
    Name the primary objects to be identified:CD45_segment
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.75
    Lower and upper bounds on threshold:0.005,1
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

OverlayObjects:[module_num:11|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
    Input:CD45
    Name the output image:Overlay_CD45
    Objects:CD45_segment
    Opacity:0.2

DisplayDataOnImage:[module_num:12|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
    Display object or image measurements?:Object
    Select the input objects:CD45_segment
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Overlay_CD45
    Text color:#FEFE0A
    Name the output image that has the measurements displayed:NumberCD45
    Font size (points):8
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:NumberCD45
    Select method for constructing file names:From image filename
    Select image name for file prefix:CD45
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:Cardiomyocyte_CM
    Name the primary objects to be identified:CM_mask
    Typical diameter of objects, in pixel units (Min,Max):30,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.98,1
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

ExpandOrShrinkObjects:[module_num:15|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
    Select the input objects:CM_mask
    Name the output objects:ExpandMask
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
ConvertObjectsToImage:[module_num:16|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
    Select the input objects:ExpandMask
    Name the output image:FinalMask
    Select the color format:Binary (black & white)
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
MaskImage:[module_num:17|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
    Select the input image:Cardiomyocyte_CM
    Name the output image:MaskedCM
    Use objects or an image as a mask?:Image
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    Select image for mask:FinalMask
    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:MaskedCM
    Name the primary objects to be identified:CM_inner_segment
    Typical diameter of objects, in pixel units (Min,Max):50,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:25
    Suppress local maxima that are closer than this minimum allowed distance:25
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.5,0.97
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:19|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
    Select the input objects:CM_inner_segment
    Name the objects to be identified:CM_outer_segment
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:MaskedCM
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:20|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
    Select the larger identified objects:CM_outer_segment
    Select the smaller identified objects:CM_inner_segment
    Name the tertiary objects to be identified:CM_border
    Shrink smaller object prior to subtraction?:Yes

OverlayObjects:[module_num:21|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
    Input:Cardiomyocyte_CM
    Name the output image:Overlay_CMs
    Objects:CM_inner_segment
    Opacity:0.3

OverlayObjects:[module_num:22|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
    Input:Cardiomyocyte_CM
    Name the output image:Overlay_WGA
    Objects:CM_outer_segment
    Opacity:0.3

DisplayDataOnImage:[module_num:23|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
    Display object or image measurements?:Object
    Select the input objects:CM_outer_segment
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Overlay_CMs
    Text color:black
    Name the output image that has the measurements displayed:NumberCMs
    Font size (points):8
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:NumberCMs
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cardiomyocyte_CM
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:25|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
    Select objects to measure:CM_inner_segment
    Select objects to measure:CD45_segment
    Select objects to measure:CM_outer_segment
    Calculate the Zernike features?:No

MeasureImageAreaOccupied:[module_num:26|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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:CM_outer_segment
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:CM_inner_segment
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:CD45_segment
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
CalculateMath:[module_num:27|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
    Name the output measurement:CD45_per_Cardiomyocyte
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_CM_inner_segment
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_CD45_segment
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
DisplayDensityPlot:[module_num:28|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
    Select the object to display on the X-axis:CM_outer_segment
    Select the object measurement to plot on the X-axis:AreaShape_Area
    Select the object to display on the Y-axis:CD45_segment
    Select the object measurement to plot on the Y-axis:AreaShape_Area
    Select the grid size:50
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    How should the colorbar be scaled?:linear
    Select the color map:BuPu
    Enter a title for the plot, if desired:Cardiomyocyte Area vs CD45 Area - Density Plot

DisplayHistogram:[module_num:29|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
    Select the object whose measurements will be displayed:CM_outer_segment
    Select the object measurement to plot:AreaShape_Area
    Number of bins:50
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Cardiomyocyte Area - Histogram
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

ExportToSpreadsheet:[module_num:30|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:CM_mask|Number_Object_Number,CM_mask|Location_Center_Y,CM_mask|Location_Center_X,CM_mask|Location_Center_Z,DAPI_segment|Location_Center_Y,DAPI_segment|Location_Center_X,DAPI_segment|Location_Center_Z,DAPI_segment|Number_Object_Number,CM_border|Location_Center_Y,CM_border|Location_Center_X,CM_border|Parent_CM_outer_segment,CM_border|Parent_CM_inner_segment,CM_border|Number_Object_Number,Image|Count_DAPI_segment,Image|Count_ExpandMask,Image|Count_CM_mask,Image|Count_CM_border,Image|Count_CM_inner_segment,Image|Count_CM_outer_segment,Image|AreaOccupied_Perimeter_CM_outer_segment,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:All_Image_data.csv
    Use the object name for the file name?:No
    Data to export:CD45_segment
    Combine these object measurements with those of the previous object?:No
    File name:CD45_only.csv
    Use the object name for the file name?:No
    Data to export:CM_outer_segment
    Combine these object measurements with those of the previous object?:No
    File name:Whole_cell.csv
    Use the object name for the file name?:No
