CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does containregexp "blue")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "red")
    Name to assign these images:tdTom
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "green")
    Name to assign these images:EdU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:DAPI
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.001,1
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

OverlayObjects:[module_num:6|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
    Input:DNA
    Name the output image:OverlayDAPI
    Objects:DAPI
    Opacity:0.3

DisplayDataOnImage:[module_num:7|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
    Display object or image measurements?:Object
    Select the input objects:DAPI
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OverlayDAPI
    Text color:#FEFE0A
    Name the output image that has the measurements displayed:DisplayDAPI
    Font size (points):8
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:DisplayDAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:tdTom
    Name the primary objects to be identified:IdentifyTdT3
    Typical diameter of objects, in pixel units (Min,Max):30,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:40
    Suppress local maxima that are closer than this minimum allowed distance:40
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.75
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:20
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    Thresholding method:Otsu

OverlayObjects:[module_num:10|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
    Input:tdTom
    Name the output image:OverlayTdTprimary
    Objects:IdentifyTdT3
    Opacity:0.3

DisplayDataOnImage:[module_num:11|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
    Display object or image measurements?:Object
    Select the input objects:IdentifyTdT3
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OverlayTdTprimary
    Text color:#FEFE0A
    Name the output image that has the measurements displayed:DisplayTdT
    Font size (points):8
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:DisplayTdT
    Select method for constructing file names:From image filename
    Select image name for file prefix:tdTom
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:EdU
    Name the primary objects to be identified:EdUpos
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.001,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

OverlayObjects:[module_num:14|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
    Input:EdU
    Name the output image:OverlayEdU
    Objects:EdUpos
    Opacity:0.3

DisplayDataOnImage:[module_num:15|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
    Display object or image measurements?:Object
    Select the input objects:EdUpos
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OverlayEdU
    Text color:#FEFE0A
    Name the output image that has the measurements displayed:DisplayEdU
    Font size (points):8
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:DisplayEdU
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:EdUpos
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureColocalization:[module_num:17|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
    Hidden:2
    Hidden:1
    Select an image to measure:tdTom
    Select an image to measure:EdU
    Set threshold as percentage of maximum intensity for the images:10
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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
RelateObjects:[module_num:18|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
    Parent objects:IdentifyTdT3
    Child objects:EdUpos
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateTdT_EdU
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
ConvertObjectsToImage:[module_num:19|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
    Select the input objects:RelateTdT_EdU
    Name the output image:DoublePositive
    Select the color format:Grayscale
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
OverlayObjects:[module_num:20|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
    Input:DisplayEdU
    Name the output image:OverlayDoublePos
    Objects:RelateTdT_EdU
    Opacity:0.3

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:OverlayDoublePos
    Select method for constructing file names:From image filename
    Select image name for file prefix:EdU
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CalculateMath:[module_num:22|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
    Name the output measurement:PercentageEdUpositiveTdTpositive
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_RelateTdT_EdU
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_EdUpos
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
MeasureImageAreaOccupied:[module_num:23|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:IdentifyTdT3
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
MeasureObjectSizeShape:[module_num:24|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
    Select objects to measure:IdentifyTdT3
    Calculate the Zernike features?:No

DisplayHistogram:[module_num:25|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
    Select the object whose measurements will be displayed:IdentifyTdT3
    Select the object measurement to plot:AreaShape_Area
    Number of bins:50
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:FB Area
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

ExportToSpreadsheet:[module_num:26|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:DAPI|Number_Object_Number,DAPI|Location_Center_Y,DAPI|Location_Center_X,DAPI|Location_Center_Z,Image|Count_DAPI,Image|Count_RelateTdT_EdU,Image|Count_EdUpos,Image|Count_IdentifyTdT3,Image|AreaOccupied_Perimeter_IdentifyTdT3,Image|AreaOccupied_AreaOccupied_IdentifyTdT3,Image|AreaOccupied_TotalArea_IdentifyTdT3,Image|Group_Index,Image|Group_Number,Image|ModuleError_16SaveImages,Image|ModuleError_25DisplayHistogram,Image|ModuleError_11DisplayDataOnImage,Image|ModuleError_10OverlayObjects,Image|ModuleError_03NamesAndTypes,Image|ModuleError_17MeasureColocalization,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:All_image_data.csv
    Use the object name for the file name?:No
    Data to export:RelateTdT_EdU
    Combine these object measurements with those of the previous object?:No
    File name:DoublePositive.csv
    Use the object name for the file name?:No
    Data to export:IdentifyTdT3
    Combine these object measurements with those of the previous object?:No
    File name:FB_only.csv
    Use the object name for the file name?:No
